PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u''}
  expName = Set
  Units = use prefs
  Screen = 1
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Routines
  Routine instruction_2
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Спасибо, что согласились принять участие в эксперименте!

        Нажмите "ПРОБЕЛ".
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction_3
    TextComponent text_4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Сейчас Вам будет показана пара кругов. Вам необходимо смотреть в центральную точку (!!!) и двигать ползунок стрелками "вправо" и "влево", пока круги не начнут казаться НЕРАВНЫМИ. После этого нажмите кнопку "accept".

        Нажмите ПРОБЕЛ после того, как будете готовы приступить к выполнению задания.
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction_4
    TextComponent text_5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Сейчас Вам будет показана пара кругов. Вам необходимо смотреть в центральную точку (!!!) и двигать ползунок стрелками "вправо" и "влево", пока круги не начнут казаться РАВНЫМИ. После этого нажмите кнопку "accept".

        Нажмите ПРОБЕЛ после того, как будете готовы приступить к выполнению задания.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    PolygonComponent bigger_circle
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.15
      pos = (3, 0)
      units = cm
      startVal [time (s)] = 0.4
      nVertices = 90
      size [set every repeat] = (2.5+threshold*size,2.5+threshold*size)
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    PolygonComponent smaller_circle
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.15
      pos = (-3, 0)
      units = cm
      startVal [time (s)] = 0.4
      nVertices = 90
      size = (2.5,2.5)
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    PolygonComponent fixational_point_1
      fillColor = $[50,1,1]
      stopVal [duration (s)] = 1.0
      units = cm
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.1, 0.1)
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    CodeComponent code_2
      End Routine:
        myequal = 0
  Routine instruction
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Сейчас вам будут показаны пары кругов. Пожалуйста, старайтесь смотреть только в центральную точку. После нескольких предъявлений вам будет задан вопрос о том, в каком отношении были ПОСЛЕДНИЕ ПРЕДЪЯВЛЕННЫЕ круги. Далее процедура повторится.
        Постарайтесь опираться только на ощущения и отвечать как можно быстрее.

        Желаю терпения и внимательности!

        Нажмите ПРОБЕЛ после того, как будете готовы приступить к выполнению задания.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_5
      Begin Experiment:
        import numpy
      Begin Routine:
        d1 = numpy.array(d)
        threshold = d1.mean()
  Routine Estimating_differential_threshold_2
    RatingScaleComponent rating_down
      pos = 0, -0.4
      high = 1
      startVal [time (s)] = 0.0
      markerStart = 1
      size = 1.0
      forceEndRoutine = True
      low = 0
      visualAnalogScale = True
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    PolygonComponent down_changed_circle
      fillColor = $[1,1,1]
      pos = (3, 0)
      units = cm
      startVal [time (s)] = 0.5
      nVertices = 90
      size [set every frame] = (2.5,2.5)
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    PolygonComponent down_circle
      fillColor = $[1,1,1]
      pos = (-3, 0)
      units = cm
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (2.5, 2.5)
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    PolygonComponent fixational_point_3
      fillColor = $[1,1,1]
      units = cm
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.1, 0.1)
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    CodeComponent code_4
      Begin Experiment:
        d = []
      End Routine:
        d.append(rating_down.getRating()/2.0)
      Each Frame:
        m = rating_down.getRating()/2.0
        down_changed_circle.size = (2.5+m,2.5+m)
  Routine rest
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Вы можете отдохнуть.

        Нажмите ПРОБЕЛ, когда будете готовы приступить к заданию.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test
    PolygonComponent circle_1
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.15
      pos = (3, 0)
      units = cm
      startVal [time (s)] = 0.6
      nVertices = 90
      size = (2.5, 2.5)
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    PolygonComponent circle_2
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.15
      pos = (-3, 0)
      units = cm
      startVal [time (s)] = 0.6
      nVertices = 90
      size = (2.5, 2.5)
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    KeyboardComponent answer
      forceEndRoutine = True
      allowedKeys = 'left','right','down'
      startVal [time (s)] = 0.8
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    TextComponent question
      pos = (0, 0.3)
      startVal [time (s)] = 0.8
      letterHeight = 0.1
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      text:
        В каком отношении были последние предъявленные круги? ("влево" - левый больше, "вправо" - правый больше, "вниз" - равны)
    PolygonComponent fixational_point_2
      fillColor = $[50,1,1]
      stopVal [duration (s)] = 0.6
      units = cm
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.1, 0.1)
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    CodeComponent code
      Begin Experiment:
        myequal = 0
      End Routine:
        if answer.keys == "down":
            myequal += 1
        elif answer.keys != "down":
            myequal = 0
        if myequal >= 3:
            break
  Routine thank_you
    TextComponent thanks
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Эксперимент окончен.

        Спасибо за участие!
  Routine Estimating_differential_threshold
    RatingScaleComponent rating_up
      pos = 0, -0.4
      high = 1
      startVal [time (s)] = 0.0
      markerStart = 0
      size = 1.0
      forceEndRoutine = True
      low = 0
      visualAnalogScale = True
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    PolygonComponent up_changed_circle
      fillColor = $[1,1,1]
      pos = (3, 0)
      units = cm
      startVal [time (s)] = 0.5
      nVertices = 90
      size [set every frame] = (2.5,2.5)
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    PolygonComponent up_circle
      fillColor = $[1,1,1]
      pos = (-3, 0)
      units = cm
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (2.5, 2.5)
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    PolygonComponent fixational_point
      fillColor = $[1,1,1]
      units = cm
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.1, 0.1)
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    CodeComponent code_3
      Begin Experiment:
        d = []
      End Routine:
        d.append(rating_up.getRating()/2.0)
      Each Frame:
        m = rating_up.getRating()/2.0
        up_changed_circle.size = (2.5+m,2.5+m)
Flow
  LoopInitiator estimating_threshold loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine instruction_3
    Routine Estimating_differential_threshold
    Routine instruction_4
    Routine Estimating_differential_threshold_2
  LoopTerminator estimating_threshold
  Routine instruction
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = set_conditions_1.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'number_of_fixational_trials': 1, 'size': 1},
      {'number_of_fixational_trials': 2, 'size': 1},
      {'number_of_fixational_trials': 3, 'size': 1},
      {'number_of_fixational_trials': 4, 'size': 1},
      {'number_of_fixational_trials': 5, 'size': 1},
      {'number_of_fixational_trials': 6, 'size': 1},
      {'number_of_fixational_trials': 7, 'size': 1},
      {'number_of_fixational_trials': 8, 'size': 1},
      {'number_of_fixational_trials': 1, 'size': 2},
      {'number_of_fixational_trials': 2, 'size': 2},
      {'number_of_fixational_trials': 3, 'size': 2},
      {'number_of_fixational_trials': 4, 'size': 2},
      {'number_of_fixational_trials': 5, 'size': 2},
      {'number_of_fixational_trials': 6, 'size': 2},
      {'number_of_fixational_trials': 7, 'size': 2},
      {'number_of_fixational_trials': 8, 'size': 2},
      {'number_of_fixational_trials': 1, 'size': 3},
      {'number_of_fixational_trials': 2, 'size': 3},
      {'number_of_fixational_trials': 3, 'size': 3},
      {'number_of_fixational_trials': 4, 'size': 3},
      {'number_of_fixational_trials': 5, 'size': 3},
      {'number_of_fixational_trials': 6, 'size': 3},
      {'number_of_fixational_trials': 7, 'size': 3},
      {'number_of_fixational_trials': 8, 'size': 3}]
    LoopInitiator trials loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = $number_of_fixational_trials
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      Routine fixation
    LoopTerminator trials
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = random
      nReps = 100
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      Routine test
    LoopTerminator trials_3
    Routine rest
  LoopTerminator trials_2
  Routine thank_you
