PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u''}
  expName = Set
  Units = use prefs
  Screen = 1
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Routines
  Routine fixation
    PolygonComponent polygon
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.15
      pos = (3, 0)
      units = cm
      startVal [time (s)] = 0.4
      nVertices = 90
      size [set every repeat] = $size
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    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.15
      pos = (-3, 0)
      units = cm
      startVal [time (s)] = 0.4
      nVertices = 90
      size = (2.5,2.5)
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    PolygonComponent polygon_5
      fillColor = $[50,1,1]
      stopVal [duration (s)] = 1.0
      units = cm
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.1, 0.1)
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    CodeComponent code_2
      End Routine:
        myequal = 0
  Routine test
    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.15
      pos = (3, 0)
      units = cm
      startVal [time (s)] = 0.6
      nVertices = 90
      size = (2.5, 2.5)
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    PolygonComponent polygon_4
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.15
      pos = (-3, 0)
      units = cm
      startVal [time (s)] = 0.6
      nVertices = 90
      size = (2.5, 2.5)
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    KeyboardComponent answer
      forceEndRoutine = True
      allowedKeys = 'left','right','down'
      startVal [time (s)] = 0.8
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    TextComponent text
      pos = (0, 0.3)
      startVal [time (s)] = 0.8
      letterHeight = 0.1
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      text:
        В каком отношении были круги? ("влево" - левый больше, "вправо" - правый больше, "вниз" - равны)
    PolygonComponent polygon_6
      fillColor = $[50,1,1]
      stopVal [duration (s)] = 0.6
      units = cm
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.1, 0.1)
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    CodeComponent code
      Begin Experiment:
        myequal = 0
      End Routine:
        if answer.keys == "down":
            myequal += 1
        elif answer.keys != "down":
            myequal = 0
        if myequal >= 3:
            break
  Routine instruction
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Закройте левый глаз.
        Сейчас вам будут показаны пары кругов. Пожалуйста, старайтесь смотреть только в центральную точку. После нескольких предъявлений вам будет задан вопрос о том, в каком отношении были ПОСЛЕДНИЕ ПРЕДЪЯВЛЕННЫЕ круги. Далее процедура повторится.

        Желаю терпения и внимательности!

        Нажмите ПРОБЕЛ после того, как будете готовы приступить к выполнению задания.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thank_you
    TextComponent text_4
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Эксперимент окончен.

        Спасибо за участие!
  Routine rest
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Вы можете отдохнуть.

        Нажмите ПРОБЕЛ, когда будете готовы приступить к заданию.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instruction
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = set_conditions.csv
    isTrials = False
    loopType = random
    nReps = 40
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    conditions:
      [{'number_of_fixational_trials': 1, 'size': [2.6, 2.6]},
      {'number_of_fixational_trials': 2, 'size': [2.6, 2.6]},
      {'number_of_fixational_trials': 3, 'size': [2.6, 2.6]},
      {'number_of_fixational_trials': 4, 'size': [2.6, 2.6]},
      {'number_of_fixational_trials': 5, 'size': [2.6, 2.6]},
      {'number_of_fixational_trials': 6, 'size': [2.6, 2.6]},
      {'number_of_fixational_trials': 7, 'size': [2.6, 2.6]},
      {'number_of_fixational_trials': 8, 'size': [2.6, 2.6]},
      {'number_of_fixational_trials': 9, 'size': [2.6, 2.6]},
      {'number_of_fixational_trials': 10, 'size': [2.6, 2.6]},
      {'number_of_fixational_trials': 1, 'size': [2.7, 2.7]},
      {'number_of_fixational_trials': 2, 'size': [2.7, 2.7]},
      {'number_of_fixational_trials': 3, 'size': [2.7, 2.7]},
      {'number_of_fixational_trials': 4, 'size': [2.7, 2.7]},
      {'number_of_fixational_trials': 5, 'size': [2.7, 2.7]},
      {'number_of_fixational_trials': 6, 'size': [2.7, 2.7]},
      {'number_of_fixational_trials': 7, 'size': [2.7, 2.7]},
      {'number_of_fixational_trials': 8, 'size': [2.7, 2.7]},
      {'number_of_fixational_trials': 9, 'size': [2.7, 2.7]},
      {'number_of_fixational_trials': 10, 'size': [2.7, 2.7]},
      {'number_of_fixational_trials': 1, 'size': [2.8, 2.8]},
      {'number_of_fixational_trials': 2, 'size': [2.8, 2.8]},
      {'number_of_fixational_trials': 3, 'size': [2.8, 2.8]},
      {'number_of_fixational_trials': 4, 'size': [2.8, 2.8]},
      {'number_of_fixational_trials': 5, 'size': [2.8, 2.8]},
      {'number_of_fixational_trials': 6, 'size': [2.8, 2.8]},
      {'number_of_fixational_trials': 7, 'size': [2.8, 2.8]}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
    LoopInitiator trials loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = $number_of_fixational_trials
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      Routine fixation
    LoopTerminator trials
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = random
      nReps = 100
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      Routine test
    LoopTerminator trials_3
    Routine rest
  LoopTerminator trials_2
  Routine thank_you
