PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = Set_1
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.2
      units = cm
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (5, 5)
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 1.0
      forceEndRoutine = True
      allowedKeys = 'y'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_2
    PolygonComponent polygon_2
      stopVal [duration (s)] = 0.2
      units = cm
      fillColor = $[1,1,1]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (6, 6)
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 1.0
      forceEndRoutine = True
      allowedKeys = 'y'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test_2
    PolygonComponent polygon_4
      stopVal [duration (s)] = 0.2
      units = cm
      fillColor = $[1,1,1]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (5, 5)
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    KeyboardComponent key_resp_5
      stopVal [duration (s)] = 1.0
      forceEndRoutine = True
      allowedKeys = 'y'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test_1
    PolygonComponent polygon_3
      stopVal [duration (s)] = 0.2
      units = cm
      fillColor = $[1,1,1]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (5, 5)
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    KeyboardComponent key_resp_4
      stopVal [duration (s)] = 1.0
      forceEndRoutine = True
      allowedKeys = 'y'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 15
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      Routine trial
      Routine trial_2
    LoopTerminator trials
    Routine test_1
    Routine test_2
  LoopTerminator trials_2
